<CompuCell3D Revision="20210612" Version="4.2.5">
   <Potts>
      <Dimensions x="200" y="200" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Tumor"/>
      <CellType TypeId="2" TypeName="Hypoxic"/>
   </Plugin>

   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Tumor" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="Hypoxic" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>

   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Tumor">16.0</Energy>
      <Energy Type1="Tumor" Type2="Tumor">4.0</Energy> <NeighborOrder>1</NeighborOrder>
   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="Oxygen">
         <DiffusionData>
            <FieldName>Oxygen</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="Medium">0.1</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
</CompuCell3D>